PsychoPy2experiment version="2023.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1352,878]
  expName = detectEmotion
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent intro
      durationEstim = 10
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = Let's reflect on your emotions
      units = norm
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    TextComponent textNext
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.88, 0)
      startVal [time (s)] = 0.0
      text = >>
      units = norm
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    MouseComponent mouseNext
      clickable = textNext
      durationEstim = 10
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.5
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  Routine notes
    TextboxComponent textNote
      bold = False
      durationEstim = 30
      editable = True
      letterHeight = 0.0666
      placeholder = What makes you feel that way?
      size = (1, 0.5)
      startVal [time (s)] = 0.2
      units = norm
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    TextComponent textExit
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.88,0)
      startVal [time (s)] = 0.2
      text = >>
      units = norm
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    MouseComponent mouseExit
      clickable = textExit
      durationEstim = 30
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.2
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    StaticComponent ISI_3
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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  Routine emotions
    TextComponent question
      disabled = True
      durationEstim = 30
      font = Times New Roman
      letterHeight = 0.07
      pos = (0,.84)
      startVal [time (s)] = 0.2
      text = How do you feel right now? Click
      units = norm
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    TextComponent Anger
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.1,.68)
      startVal [time (s)] = 0.2
      text = Anger
      units = norm
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    TextComponent Interest
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.1,0.68)
      startVal [time (s)] = 0.2
      text = Interest
      units = norm
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    TextComponent Hate
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.2,0.52)
      startVal [time (s)] = 0.2
      text = Hate
      units = norm
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    TextComponent Amusement
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.255,0.52)
      startVal [time (s)] = 0.2
      text = Amusement
      units = norm
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    TextComponent Contempt
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.3,0.36)
      startVal [time (s)] = 0.2
      text = Contempt
      units = norm
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    TextComponent Pride
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.3,0.36)
      startVal [time (s)] = 0.2
      text = Pride
      units = norm
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    TextComponent Disgust
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.4,0.2)
      startVal [time (s)] = 0.2
      text = Disgust
      units = norm
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    TextComponent Joy
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.35,0.2)
      startVal [time (s)] = 0.2
      text = Joy
      units = norm
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    TextComponent Fear
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.5,0.04)
      startVal [time (s)] = 0.2
      text = Fear
      units = norm
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    TextComponent Pleasure
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.45,0.04)
      startVal [time (s)] = 0.2
      text = Pleasure
      units = norm
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    TextComponent Disappointment
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.65,-0.12)
      startVal [time (s)] = 0.2
      text = Disappointment
      units = norm
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    TextComponent Contentment
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.58,-0.12)
      startVal [time (s)] = 0.2
      text = Contentment
      units = norm
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    TextComponent Shame
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.5,-0.28)
      startVal [time (s)] = 0.2
      text = Shame
      units = norm
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    TextComponent Admiration
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.48,-0.28)
      startVal [time (s)] = 0.2
      text = Admiration
      units = norm
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    TextComponent Regret
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.38,-0.44)
      startVal [time (s)] = 0.2
      text = Regret
      units = norm
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    TextComponent Love
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.38,-0.44)
      startVal [time (s)] = 0.2
      text = Love
      units = norm
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    TextComponent Guilt
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.28,-0.6)
      startVal [time (s)] = 0.2
      text = Guilt
      units = norm
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    TextComponent Relief
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.28,-0.6)
      startVal [time (s)] = 0.2
      text = Relief
      units = norm
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    TextComponent Sadness
      durationEstim = 30
      letterHeight = 0.07
      pos = (-0.15,-0.76)
      startVal [time (s)] = 0.2
      text = Sadness
      units = norm
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    TextComponent Compassion
      durationEstim = 30
      letterHeight = 0.07
      pos = (0.15,-0.76)
      startVal [time (s)] = 0.2
      text = Compassion
      units = norm
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    MouseComponent mouse
      clickable = Hate, Interest, Anger, Amusement, Contempt, Pride, Disgust, Joy, Fear, Pleasure, Disappointment, Contentment, Shame, Admiration, Regret, Love, Guilt, Relief, Sadness, Compassion
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.2
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    StaticComponent ISI_2
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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  Routine instruction
    TextComponent emoWheelIntro
      durationEstim = 15
      letterHeight = 0.09
      startVal [time (s)] = 0.2
      text = Click the word that best describes how you are feeling right now
      units = norm
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    TextComponent textEmoNext
      durationEstim = 15
      letterHeight = 0.07
      pos = (0.88, 0)
      startVal [time (s)] = 0.2
      text = >>
      units = norm
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    MouseComponent mouseEmoNext
      clickable = textEmoNext
      durationEstim = 15
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.5
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    StaticComponent ISI
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine bye
    TextComponent text
      durationEstim = 20
      letterHeight = 0.066
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank you for reflecting on your emotions
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'enter', 'esc'
      disabled = True
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine welcome
    Routine instruction
    Routine emotions
    Routine notes
    Routine bye
  LoopTerminator trials
